PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'age': '', 'gender': '', 'participant': '', 'UseMonkey': 'n'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.0.5
  Window size (pixels) = [1600, 900]
  color = white
  expName = ec_RRR
  logging level = error
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Routines
  Routine surveillance_trial
    CodeComponent code_surveillance
      Code Type = Py
      Begin Routine:
        # write this value to disk
        thisExp.addData('condition', condition)
    KeyboardComponent surveillance_response
      allowedKeys = 'space', 'None'
      correctAns = $surveillance_correct_response
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = surveillance_duration
      store = first key
      storeCorrect = True
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    ImageComponent surveillance_image
      durationEstim = 1.5
      image [set every repeat] = $stimulus
      size = (1.3, 0.73)
      startVal [time (s)] = 0
      stopVal [duration (s)] = surveillance_duration
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  Routine surveillance_instructions_2
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # dependencies
        from numpy.random import randint
        from psychopy.hardware.emulator import ResponseEmulator

        # randomly assign to condition
        condition_randomisation = randint(1, 3, size = 1)
        if condition_randomisation == 1:
            condition = "CS1_USpos"
        elif condition_randomisation == 2:
            condition = "CS1_USneg"

        # write this value to disk
        thisExp.addData('condition', condition)

        # auto response monkey
        if str(expInfo['UseMonkey']) == 'y':
            monkey = True
            surveillance_duration = 0.1
        else:
            monkey = False
            surveillance_duration = 1.5
      Begin Routine:
        surveillance_file_name = "trials/surveillance_trials_participant_" + str(expInfo['participant']) + "_condition_" + condition + "_" + block_id + "_.csv"

        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(1, 'space')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()
    KeyboardComponent key_resp_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent example
      image [set every repeat] = $example_image
      pos = (0, 0.05)
      size = (0.3, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_top
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text_top
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    TextComponent text_instructions_bottom
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text_bottom
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  Routine instructions
    CodeComponent code_instructions
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(2, 'space')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()
    KeyboardComponent instructions_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_instructions
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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  Routine filler_1
    CodeComponent code_filler_1
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(0.3, '3'), (0.6, 'return')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # write this value to disk
        thisExp.addData('condition', condition)
    RatingScaleComponent filler_1_rating
      customize_everything = lineColor='Black', textColor='Black', low=1, high=7, scale=""
      forceEndRoutine = True
      pos = 0, -0.4
      size = 2.0
      startVal [time (s)] = 0.0
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    TextComponent filler_1_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $filler_1_items
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  Routine filler_2
    CodeComponent code_filler_2
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(0.3, '3'), (0.6, 'return')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # write this value to disk
        thisExp.addData('condition', condition)
    RatingScaleComponent filler_2_rating
      customize_everything = lineColor='Black', textColor='Black', low=1, high=5, scale=""
      forceEndRoutine = True
      high = 5
      low = 1
      pos = 0, -0.4
      size = 2.0
      startVal [time (s)] = 0.0
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    TextComponent filler_2_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $filler_2_items
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  Routine evaluation_trial
    CodeComponent code_evaluation
      Code Type = Py
      Begin Experiment:
        # get evaluation file
        evaluation_file_name = "trials/evaluation_trials_participant_" + str(expInfo['participant']) + ".csv"
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(0.1, 'e'), (0.1, 'i')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # write this value to disk
        thisExp.addData('condition', condition)
    KeyboardComponent evaluation_response
      allowedKeys = 'e', 'i'
      correctAns = $evaluation_response_indicating_CS1_preferred
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    ImageComponent evaluation_image
      image [set every repeat] = $evaluation_stimulus
      pos = (0, 0.2)
      size = (0.6, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_evaluations_instruction_middle
      color = black
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $middle_text
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    TextComponent text_evaluations_instruction_left_top
      color = black
      letterHeight = 0.03
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_text
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    TextComponent text_evaluations_instruction_right_top
      color = black
      letterHeight = 0.03
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_text
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    TextComponent text_evaluations_instruction_left_bottom
      color = black
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text = e
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    TextComponent text_evaluations_instruction_right_bottom
      color = black
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text = i
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  Routine awareness_2_trial
    CodeComponent code_awareness_2
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(0.3, '1'), (0.6, 'return')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # write this value to disk
        thisExp.addData('condition', condition)
    RatingScaleComponent awareness_2_rating
      customize_everything = lineColor='Black', textColor='Black', scale=None
      forceEndRoutine = True
      high = awareness_2_response_max
      labels = Strong disagreement, Strong agreement
      low = 1
      pos = 0, -0.4
      size = 2.0
      startVal [time (s)] = 0.0
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    TextComponent awareness_2_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $awareness_2_question_text
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  Routine awareness_type_1_trial
    CodeComponent code_awareness_type_1
      Code Type = Py
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        awareness_type_1_show_response.alignHoriz ='left'

        # write this value to disk
        thisExp.addData('condition', condition)

        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(2, 'return')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:

        # pressing RETURN ends the trial
            if theseKeys[i] == 'return' and len(inputText) >= 20:
                continueRoutine = False
                break

        # lose the final character
            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] == 'period':
                inputText += '.'
                i = i + 1

            elif theseKeys[i] == 'comma':
                inputText += ','
                i = i + 1

            elif theseKeys[i] == 'question':
                inputText += '?'
                i = i + 1

            elif theseKeys[i] == 'doublequote':
                inputText += '"'
                i = i + 1

            elif theseKeys[i] == 'apostrophe':
                inputText += "'"
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
      End Routine:
        # store the final text string into the results file
        thisExp.addData('inputText', inputText)
        inputText=""
    PolygonComponent box
      fillColor = lightgrey
      lineColor = black
      lineWidth = 2
      pos = [0, -0.15]
      shape = rectangle
      size = (1.1, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent awareness_type_1_question
      color = black
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $awareness_1_question_text
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    TextComponent awareness_type_1_show_response
      color = black
      letterHeight = 0.03
      pos = [-0.5, -0.15]
      startVal [time (s)] = 0.0
      text [set every frame] = $(inputText)
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    KeyboardComponent awareness_1_response
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine awareness_type_2a_trial
    CodeComponent code_awareness_type_2a
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(0.3, '1'), (0.6, 'return')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # write this value to disk
        thisExp.addData('condition', condition)
    RatingScaleComponent awareness_type_2a_rating
      customize_everything = lineColor='Black', textColor='Black', low=1, high=2, scale=""
      forceEndRoutine = True
      pos = 0, -0.4
      size = 2.0
      startVal [time (s)] = 0.0
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    TextComponent awareness_type_2a_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $awareness_2a_question_text
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  Routine awareness_type_2b_trial
    CodeComponent code_awareness_type_2b
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(0.3, '1'), (0.6, 'return')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # write this value to disk
        thisExp.addData('condition', condition)
    RatingScaleComponent awareness_type_2b_rating
      customize_everything = lineColor='Black', textColor='Black', low=1, high=6, scale=""
      forceEndRoutine = True
      pos = 0, -0.4
      size = 2.0
      startVal [time (s)] = 0.0
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    TextComponent awareness_type_2b_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $awareness_2b_question_text
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  Routine awareness_type_2c_trial
    CodeComponent code_awareness_type_2c
      Code Type = Py
      Begin Routine:
        # simulate responses using ResponseEmulator, for testing
        if monkey:
            simulated_responses = [(0.3, '1'), (0.6, 'return')]
            responder = ResponseEmulator(simulated_responses)
            responder.start()

        # write this value to disk
        thisExp.addData('condition', condition)
    RatingScaleComponent awareness_type_2c_rating
      customize_everything = lineColor='Black', textColor='Black', low=1, high=9, scale=""
      forceEndRoutine = True
      pos = 0, -0.4
      size = 2.0
      startVal [time (s)] = 0.0
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    TextComponent awareness_type_2c_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $awareness_2_question_text
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Flow
  LoopInitiator record_data_collection_site_variable loopType="TrialHandler"
    conditions = [OrderedDict([('data_collection_site', 'e.g., Unkelbach')])]
    conditionsFile = data_collection_site.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator surveillance_instructions_loop loopType="TrialHandler"
      Selected rows = 0:4
      conditionsFile = instructions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine instructions
    LoopTerminator surveillance_instructions_loop
    LoopInitiator surveillance_blocks_loop loopType="TrialHandler"
      conditionsFile = instructions_surveillance.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('instructions_text_top', 'For this task, the target creature is Crandios:'), ('instructions_text_bottom', 'So whenever Crandios (his name or his picture) appears on the screen, hit the spacebar as quickly as possible. Hit the spacebar whenever you see an image of Crandio or the word CRANDIOS. \n\nPress the spacebar to start the this task'), ('block_id', 'target1'), ('example_image', 'stimuli/t1.jpg')]),
        OrderedDict([('instructions_text_top', 'For this task, the target creature is Shelmet:'), ('instructions_text_bottom', 'So whenever Shelmet (his name or his picture) appears on the screen, hit the spacebar as quickly as possible. Hit the spacebar whenever you see an image of Shelmet or the word SHELMET. \n\nPress the spacebar to start the this task'), ('block_id', 'target2'), ('example_image', 'stimuli/t2.jpg')]),
        OrderedDict([('instructions_text_top', 'For this task, the target creature is Grubbin:'), ('instructions_text_bottom', 'So whenever Grubbin (his name or his picture) appears on the screen, hit the spacebar as quickly as possible. Hit the spacebar whenever you see an image of Grubbin or the word GRUBBIN. \n\nPress the spacebar to start the this task'), ('block_id', 'target3'), ('example_image', 'stimuli/t3.jpg')]),
        OrderedDict([('instructions_text_top', 'For this task, the target creature is Magearna:'), ('instructions_text_bottom', 'So whenever Magerana (his name or his picture) appears on the screen, hit the spacebar as quickly as possible. Hit the spacebar whenever you see an image of MAGEARNA or the word MAGERANA. \n\nPress the spacebar to start the this task'), ('block_id', 'target4'), ('example_image', 'stimuli/t4.jpg')])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
      Routine surveillance_instructions_2
      LoopInitiator surveillance_trials_loop loopType="TrialHandler"
        conditionsFile = $surveillance_file_name
        loopType = sequential
        nReps = 1
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        Routine surveillance_trial
      LoopTerminator surveillance_trials_loop
    LoopTerminator surveillance_blocks_loop
    LoopInitiator filler_1_instructions_loop loopType="TrialHandler"
      Selected rows = 4:6
      conditionsFile = instructions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('instructions_text', "Imagine that you are a security guard watching for deviant activity at a business. Your job requires that you pay attention at all times, and respond quickly when something suspicious happens.  \n\nIn our lab we study attention and rapid responding, and in this experiment you'll be asked to play the role of the security guard. \n\nSpecifically, you will be attending to a number of items presented on the computer screen, and you'll be responding as quickly as  possible when a target item appears by pressing the spacebar.  \n\n\nPress the spacebar to continue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,
        OrderedDict([('instructions_text', "The target item will appear at random several times throughout the experiment. The target item may appear as an image or as a name.  So be sure to pay attention at all times and focus on the screen, because you never know when the target item will appear.  \n\nA number of filler items that we've selected from our stimulus pool will also be shown randomly to make the task more challenging. These distractors are both pictures and words that were just randomly picked from our collection.  \n\nSometimes two images will appear on the screen at the same time, and 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,
        OrderedDict([('instructions_text', 'The items will be displayed rapidly, so make sure that when you see a target, you hit the spacebar before it disappears.  \n\nAgain, be sure to pay close attention throughout the experiment so that you can respond as quickly and accurately as possible.  \n\nThere will be five separate surveillance tasks of about 4 minutes each.  \n\nEach task will have a different target, and all of the target items will be cartoon creatures. \n\n\nPress the spacebar to continue.')])]
      Routine instructions
    LoopTerminator filler_1_instructions_loop
    LoopInitiator filler_1_loop loopType="TrialHandler"
      conditionsFile = filler_1.xlsx
      loopType = sequential
      nReps = 1
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      Routine filler_1
    LoopTerminator filler_1_loop
    LoopInitiator filler_2_instructions_loop loopType="TrialHandler"
      Selected rows = 6:7
      conditionsFile = instructions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine instructions
    LoopTerminator filler_2_instructions_loop
    LoopInitiator filler_2_loop loopType="TrialHandler"
      conditionsFile = filler_2.xlsx
      loopType = sequential
      nReps = 1
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      Routine filler_2
    LoopTerminator filler_2_loop
    LoopInitiator evaluation_instructions_loop loopType="TrialHandler"
      Selected rows = 7:9
      conditionsFile = instructions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine instructions
    LoopTerminator evaluation_instructions_loop
    LoopInitiator evaluation_loop loopType="TrialHandler"
      conditions = [OrderedDict([('middle_text', 'Please choose which of the two images you prefer:'), ('left_text', 'The image on the left:'), ('right_text', 'The image on the right:')])]
      conditionsFile = instructions_evaluation.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      LoopInitiator evaluation_trials loopType="TrialHandler"
        conditionsFile = $evaluation_file_name
        loopType = sequential
        nReps = 1
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        Routine evaluation_trial
      LoopTerminator evaluation_trials
    LoopTerminator evaluation_loop
    LoopInitiator awareness_instructions_loop loopType="TrialHandler"
      Selected rows = 9:10
      conditionsFile = instructions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('instructions_text', "Imagine that you are a security guard watching for deviant activity at a business. Your job requires that you pay attention at all times, and respond quickly when something suspicious happens.  \n\nIn our lab we study attention and rapid responding, and in this experiment you'll be asked to play the role of the security guard. \n\nSpecifically, you will be attending to a number of items presented on the computer screen, and you'll be responding as quickly as  possible when a target item appears by pressing the spacebar.  \n\n\nPress the spacebar to continue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,
        OrderedDict([('instructions_text', "The target item will appear at random several times throughout the experiment. The target item may appear as an image or as a name.  So be sure to pay attention at all times and focus on the screen, because you never know when the target item will appear.  \n\nA number of filler items that we've selected from our stimulus pool will also be shown randomly to make the task more challenging. These distractors are both pictures and words that were just randomly picked from our collection.  \n\nSometimes two images will appear on the screen at the same time, and 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,
        OrderedDict([('instructions_text', 'The items will be displayed rapidly, so make sure that when you see a target, you hit the spacebar before it disappears.  \n\nAgain, be sure to pay close attention throughout the experiment so that you can respond as quickly and accurately as possible.  \n\nThere will be five separate surveillance tasks of about 4 minutes each.  \n\nEach task will have a different target, and all of the target items will be cartoon creatures. \n\n\nPress the spacebar to continue.')]),
        OrderedDict([('instructions_text', 'Next, we are going to ask you a number of questions. ')])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
      Routine instructions
    LoopTerminator awareness_instructions_loop
    LoopInitiator awareness_1_trials_loop loopType="TrialHandler"
      conditionsFile = awareness_1.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('awareness_1_question_text', 'Think back to the very first part of the experiment. Did you notice anything out of the ordinary in the way the words and pictures were presented during the surveillance tasks?')]),
        OrderedDict([('awareness_1_question_text', 'Did you notice anything systematic about how particular words and images appeared together during the surveillance tasks?')]),
        OrderedDict([('awareness_1_question_text', 'Did you notice anything about the words and images that appeared with certain cartoon creatures? ')])]
      Routine awareness_type_1_trial
    LoopTerminator awareness_1_trials_loop
    LoopInitiator awareness_2a_trials_loop loopType="TrialHandler"
      conditions = [OrderedDict([('awareness_2a_question_text', 'For some participants, during the first task, there was one cartoon creature that always appeared with positive images and words, and one that always appeared with negative images and words. Do you think it happened in your case?\n\n1 = No, I did not notice if that happened in my task\n2 = Yes, that happened in my task\n\nClick the line, then confirm your choice by clicking the grey button below.')])]
      conditionsFile = awareness_2a.xlsx
      loopType = sequential
      nReps = 1
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      Routine awareness_type_2a_trial
    LoopTerminator awareness_2a_trials_loop
    LoopInitiator awareness_2b_trials_loop loopType="TrialHandler"
      conditionsFile = awareness_2b.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('awareness_2b_question_text', 'During the first task, which of the two characters was consistently presented with POSITIVE images and words? \n\n1 = BERGMITE (certainly)\n2 = BERGMITE (probably)\n3 = BERGMITE (guess)\n4 = GOLETT (guess)\n5 = GOLETT (probably)\n6 = GOLETT (certainly)\n\nClick the line, then confirm your choice by clicking the grey button below.')]),
        OrderedDict([('awareness_2b_question_text', 'During the first task, which of the two characters was consistently presented with NEGATIVE images and words? \n\n1 = BERGMITE (certainly)\n2 = BERGMITE (probably)\n3 = BERGMITE (guess)\n4 = GOLETT (guess)\n5 = GOLETT (probably)\n6 = GOLETT (certainly)\n\nClick the line, then confirm your choice by clicking the grey button below.')])]
      Routine awareness_type_2b_trial
    LoopTerminator awareness_2b_trials_loop
    LoopInitiator awareness_2c_trials_loop loopType="TrialHandler"
      conditions = [OrderedDict([('awareness_2_question_text', 'How familiar were you with the cartoon creatures that appeared in the surveillance tasks?  \n\n1 = Not Familiar at all\n2\n3\n4\n5\n6\n7\n9 = Very Familiar\n\nClick the line, then confirm your choice by clicking the grey button below.')])]
      conditionsFile = awareness_2c.xlsx
      loopType = sequential
      nReps = 1
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      Routine awareness_type_2c_trial
    LoopTerminator awareness_2c_trials_loop
    LoopInitiator end_message_loop loopType="TrialHandler"
      Selected rows = 10:11
      conditionsFile = instructions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine instructions
    LoopTerminator end_message_loop
  LoopTerminator record_data_collection_site_variable
